PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = monetary_reward_task
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Routines
  Routine instructions
    TextComponent text_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = These are the instructions for the task. bluch
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    KeyboardComponent key_resp
      allowedKeys = '5','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine decision
    PolygonComponent polygon
      fillColor = black
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent text
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = ?
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine anticipation
    TextComponent text_4
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $TrialType
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  Routine outcome
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = 1
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = win!
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  Routine fixation
    TextComponent text_3
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = +
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  Routine isi
    TextComponent text_7
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text = +
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Flow
  Routine instructions
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_types.csv
    loopType = sequential
    nReps = 24
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    conditions:
      [OrderedDict([('TrialType', 1)]),
      OrderedDict([('TrialType', 2)]),
      OrderedDict([('TrialType', 3)]),
      OrderedDict([('TrialType', 4)]),
      OrderedDict([('TrialType', 1)]),
      OrderedDict([('TrialType', 2)]),
      OrderedDict([('TrialType', 3)]),
      OrderedDict([('TrialType', 4)]),
      OrderedDict([('TrialType', 1)]),
      OrderedDict([('TrialType', 2)]),
      OrderedDict([('TrialType', 3)]),
      OrderedDict([('TrialType', 4)]),
      OrderedDict([('TrialType', 1)]),
      OrderedDict([('TrialType', 2)]),
      OrderedDict([('TrialType', 3)]),
      OrderedDict([('TrialType', 4)]),
      OrderedDict([('TrialType', 1)]),
      OrderedDict([('TrialType', 2)]),
      OrderedDict([('TrialType', 3)]),
      OrderedDict([('TrialType', 4)]),
      OrderedDict([('TrialType', 1)]),
      OrderedDict([('TrialType', 2)]),
      OrderedDict([('TrialType', 3)]),
      OrderedDict([('TrialType', 4)])]
    Routine decision
    Routine anticipation
    Routine outcome
    Routine isi
  LoopTerminator trials
  Routine fixation
